# Generated by Configurator on Fri Mar 06 19:16:00 EST 2020

# Reset
Property,Core,Initialize,0

# Devices
Device,AnalogIO,NI100X,AnalogIO
Device,AnalogIO-1,NI100X,AnalogIO

# Pre-init settings for devices
Property,AnalogIO,AutoDetectedOutputPort,PXI1Slot6/ao25
Property,AnalogIO,Demo,No
Property,AnalogIO,IOChannel,PXI1Slot6/ao25
Property,AnalogIO,MaxVolts,5.0000
Property,AnalogIO,MinVolts,0.0000
Property,AnalogIO,TriggerSequenceLength,1000
Property,AnalogIO-1,AutoDetectedOutputPort,PXI1Slot6/ao12
Property,AnalogIO-1,Demo,No
Property,AnalogIO-1,IOChannel,PXI1Slot6/ao12
Property,AnalogIO-1,MaxVolts,5.0000
Property,AnalogIO-1,MinVolts,0.0000
Property,AnalogIO-1,TriggerSequenceLength,1000

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings
