# Generated by Configurator on Fri Mar 06 19:17:53 EST 2020

# Reset
Property,Core,Initialize,0

# Devices
Device,COM4,SerialManager,COM4
Device,Ti2-E__0,NikonTi2,Ti2-E__0
Device,Nosepiece,NikonTi2,Nosepiece
Device,ZDrive,NikonTi2,ZDrive
Device,FilterTurret1,NikonTi2,FilterTurret1
Device,Turret1Shutter,NikonTi2,Turret1Shutter
Device,LightPath,NikonTi2,LightPath
Device,PFS,NikonTi2,PFS
Device,PFSOffset,NikonTi2,PFSOffset
Device,IntermediateMagnification,NikonTi2,IntermediateMagnification
Device,Iris15,PVCAM,Camera-1
Device,LightEngine,Lumencor,LightEngine
Device,XYStage,Prior,XYStage
Device,FW_Empty,NI100X,AnalogIO
Device,FW_FITC,NI100X,AnalogIO
Device,FW_TRITC,NI100X,AnalogIO
Device,FW_Cy5,NI100X,AnalogIO
Device,FW_CFPHQ,NI100X,AnalogIO
Device,FW_YFPHQ,NI100X,AnalogIO
Device,Cel_Violet408,NI100X,AnalogIO
Device,Cel_Blue445,NI100X,AnalogIO
Device,Cel_Cyan473,NI100X,AnalogIO
Device,Cel_Teal518,NI100X,AnalogIO
Device,Cel_Green545,NI100X,AnalogIO
Device,Cel_Red635,NI100X,AnalogIO
Device,Cel_NIR750,NI100X,AnalogIO
Device,Shutter,NI100X,AnalogIO
Device,Camera,NI100X,DigitalIO

# Pre-init settings for devices
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,38400
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,LightEngine,Connection,COM3
Property,LightEngine,Model,GEN3
Property,XYStage,Port,COM4
Property,FW_Empty,AutoDetectedOutputPort,PXI1Slot6/ao25
Property,FW_Empty,Demo,No
Property,FW_Empty,IOChannel,PXI1Slot6/ao25
Property,FW_Empty,MaxVolts,5.0000
Property,FW_Empty,MinVolts,0.0000
Property,FW_Empty,TriggerSequenceLength,1000
Property,FW_FITC,AutoDetectedOutputPort,PXI1Slot6/ao24
Property,FW_FITC,Demo,No
Property,FW_FITC,IOChannel,PXI1Slot6/ao24
Property,FW_FITC,MaxVolts,5.0000
Property,FW_FITC,MinVolts,0.0000
Property,FW_FITC,TriggerSequenceLength,1000
Property,FW_TRITC,AutoDetectedOutputPort,PXI1Slot6/ao22
Property,FW_TRITC,Demo,No
Property,FW_TRITC,IOChannel,PXI1Slot6/ao22
Property,FW_TRITC,MaxVolts,5.0000
Property,FW_TRITC,MinVolts,0.0000
Property,FW_TRITC,TriggerSequenceLength,1000
Property,FW_Cy5,AutoDetectedOutputPort,PXI1Slot6/ao12
Property,FW_Cy5,Demo,No
Property,FW_Cy5,IOChannel,PXI1Slot6/ao12
Property,FW_Cy5,MaxVolts,5.0000
Property,FW_Cy5,MinVolts,0.0000
Property,FW_Cy5,TriggerSequenceLength,1000
Property,FW_CFPHQ,AutoDetectedOutputPort,PXI1Slot6/ao26
Property,FW_CFPHQ,Demo,No
Property,FW_CFPHQ,IOChannel,PXI1Slot6/ao26
Property,FW_CFPHQ,MaxVolts,5.0000
Property,FW_CFPHQ,MinVolts,0.0000
Property,FW_CFPHQ,TriggerSequenceLength,1000
Property,FW_YFPHQ,AutoDetectedOutputPort,PXI1Slot6/ao23
Property,FW_YFPHQ,Demo,No
Property,FW_YFPHQ,IOChannel,PXI1Slot6/ao23
Property,FW_YFPHQ,MaxVolts,5.0000
Property,FW_YFPHQ,MinVolts,0.0000
Property,FW_YFPHQ,TriggerSequenceLength,1000
Property,Cel_Violet408,AutoDetectedOutputPort,PXI1Slot6/ao0
Property,Cel_Violet408,Demo,No
Property,Cel_Violet408,IOChannel,PXI1Slot6/ao0
Property,Cel_Violet408,MaxVolts,5.0000
Property,Cel_Violet408,MinVolts,0.0000
Property,Cel_Violet408,TriggerSequenceLength,1000
Property,Cel_Blue445,AutoDetectedOutputPort,PXI1Slot6/ao1
Property,Cel_Blue445,Demo,No
Property,Cel_Blue445,IOChannel,PXI1Slot6/ao1
Property,Cel_Blue445,MaxVolts,5.0000
Property,Cel_Blue445,MinVolts,0.0000
Property,Cel_Blue445,TriggerSequenceLength,1000
Property,Cel_Cyan473,AutoDetectedOutputPort,PXI1Slot6/ao2
Property,Cel_Cyan473,Demo,No
Property,Cel_Cyan473,IOChannel,PXI1Slot6/ao2
Property,Cel_Cyan473,MaxVolts,5.0000
Property,Cel_Cyan473,MinVolts,0.0000
Property,Cel_Cyan473,TriggerSequenceLength,1000
Property,Cel_Teal518,AutoDetectedOutputPort,PXI1Slot6/ao3
Property,Cel_Teal518,Demo,No
Property,Cel_Teal518,IOChannel,PXI1Slot6/ao3
Property,Cel_Teal518,MaxVolts,5.0000
Property,Cel_Teal518,MinVolts,0.0000
Property,Cel_Teal518,TriggerSequenceLength,1000
Property,Cel_Green545,AutoDetectedOutputPort,PXI1Slot6/ao4
Property,Cel_Green545,Demo,No
Property,Cel_Green545,IOChannel,PXI1Slot6/ao4
Property,Cel_Green545,MaxVolts,5.0000
Property,Cel_Green545,MinVolts,0.0000
Property,Cel_Green545,TriggerSequenceLength,1000
Property,Cel_Red635,AutoDetectedOutputPort,PXI1Slot6/ao5
Property,Cel_Red635,Demo,No
Property,Cel_Red635,IOChannel,PXI1Slot6/ao5
Property,Cel_Red635,MaxVolts,5.0000
Property,Cel_Red635,MinVolts,0.0000
Property,Cel_Red635,TriggerSequenceLength,1000
Property,Cel_NIR750,AutoDetectedOutputPort,PXI1Slot6/ao6
Property,Cel_NIR750,Demo,No
Property,Cel_NIR750,IOChannel,PXI1Slot6/ao6
Property,Cel_NIR750,MaxVolts,5.0000
Property,Cel_NIR750,MinVolts,0.0000
Property,Cel_NIR750,TriggerSequenceLength,1000
Property,Shutter,AutoDetectedOutputPort,PXI1Slot6/ao7
Property,Shutter,Demo,No
Property,Shutter,IOChannel,PXI1Slot6/ao7
Property,Shutter,MaxVolts,5.0000
Property,Shutter,MinVolts,0.0000
Property,Shutter,TriggerSequenceLength,1000
Property,Camera,AutoDetectedOutputPort,PXI1Slot6/port0
Property,Camera,IOChannel,PXI1Slot6/port0
Property,Camera,TriggerSequenceLength,1000

# Pre-init settings for COM ports

# Hub (parent) references
Parent,Nosepiece,Ti2-E__0
Parent,ZDrive,Ti2-E__0
Parent,FilterTurret1,Ti2-E__0
Parent,Turret1Shutter,Ti2-E__0
Parent,LightPath,Ti2-E__0
Parent,PFS,Ti2-E__0
Parent,PFSOffset,Ti2-E__0
Parent,IntermediateMagnification,Ti2-E__0

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZDrive,1
FocusDirection,PFSOffset,1

# Roles
Property,Core,Camera,Iris15
Property,Core,Focus,ZDrive
Property,Core,AutoShutter,0

# Camera-synchronized devices

# Labels
# Nosepiece
Label,Nosepiece,5,6-Plan Fluor 100x Oil
Label,Nosepiece,4,5-
Label,Nosepiece,3,4-Plan Apo Lmbd 40x
Label,Nosepiece,2,3-Plan Apo Lmbd 40x
Label,Nosepiece,1,2-Plan Apo Lmbd 20x
Label,Nosepiece,0,1-Plan Apo Lmbd 20x
# FilterTurret1
Label,FilterTurret1,5,6-Empty
Label,FilterTurret1,4,5-Cy7
Label,FilterTurret1,3,4-89002 - 00Cy7
Label,FilterTurret1,2,3-Continuous89002 - 00
Label,FilterTurret1,1,2-DAPI
Label,FilterTurret1,0,1-Empty
# LightPath
Label,LightPath,3,4-L100
Label,LightPath,2,3-AUX
Label,LightPath,1,2-R100
Label,LightPath,0,1-EYE
# Camera
Label,Camera,255,255
Label,Camera,254,254
Label,Camera,253,253
Label,Camera,252,252
Label,Camera,251,251
Label,Camera,250,250
Label,Camera,249,249
Label,Camera,248,248
Label,Camera,247,247
Label,Camera,246,246
Label,Camera,245,245
Label,Camera,244,244
Label,Camera,243,243
Label,Camera,242,242
Label,Camera,241,241
Label,Camera,240,240
Label,Camera,239,239
Label,Camera,238,238
Label,Camera,237,237
Label,Camera,236,236
Label,Camera,235,235
Label,Camera,234,234
Label,Camera,233,233
Label,Camera,232,232
Label,Camera,231,231
Label,Camera,230,230
Label,Camera,229,229
Label,Camera,228,228
Label,Camera,227,227
Label,Camera,226,226
Label,Camera,225,225
Label,Camera,224,224
Label,Camera,223,223
Label,Camera,222,222
Label,Camera,221,221
Label,Camera,220,220
Label,Camera,219,219
Label,Camera,218,218
Label,Camera,217,217
Label,Camera,216,216
Label,Camera,215,215
Label,Camera,214,214
Label,Camera,213,213
Label,Camera,212,212
Label,Camera,211,211
Label,Camera,210,210
Label,Camera,209,209
Label,Camera,208,208
Label,Camera,207,207
Label,Camera,206,206
Label,Camera,205,205
Label,Camera,204,204
Label,Camera,203,203
Label,Camera,202,202
Label,Camera,201,201
Label,Camera,200,200
Label,Camera,199,199
Label,Camera,198,198
Label,Camera,197,197
Label,Camera,196,196
Label,Camera,195,195
Label,Camera,194,194
Label,Camera,193,193
Label,Camera,192,192
Label,Camera,191,191
Label,Camera,190,190
Label,Camera,189,189
Label,Camera,188,188
Label,Camera,187,187
Label,Camera,186,186
Label,Camera,185,185
Label,Camera,184,184
Label,Camera,183,183
Label,Camera,182,182
Label,Camera,181,181
Label,Camera,180,180
Label,Camera,179,179
Label,Camera,178,178
Label,Camera,177,177
Label,Camera,176,176
Label,Camera,175,175
Label,Camera,174,174
Label,Camera,173,173
Label,Camera,172,172
Label,Camera,171,171
Label,Camera,170,170
Label,Camera,169,169
Label,Camera,168,168
Label,Camera,167,167
Label,Camera,166,166
Label,Camera,165,165
Label,Camera,164,164
Label,Camera,163,163
Label,Camera,162,162
Label,Camera,161,161
Label,Camera,160,160
Label,Camera,159,159
Label,Camera,158,158
Label,Camera,157,157
Label,Camera,156,156
Label,Camera,155,155
Label,Camera,154,154
Label,Camera,153,153
Label,Camera,152,152
Label,Camera,151,151
Label,Camera,150,150
Label,Camera,149,149
Label,Camera,148,148
Label,Camera,147,147
Label,Camera,146,146
Label,Camera,145,145
Label,Camera,144,144
Label,Camera,143,143
Label,Camera,142,142
Label,Camera,141,141
Label,Camera,140,140
Label,Camera,139,139
Label,Camera,138,138
Label,Camera,137,137
Label,Camera,136,136
Label,Camera,135,135
Label,Camera,134,134
Label,Camera,133,133
Label,Camera,132,132
Label,Camera,131,131
Label,Camera,130,130
Label,Camera,129,129
Label,Camera,128,128
Label,Camera,127,127
Label,Camera,126,126
Label,Camera,125,125
Label,Camera,124,124
Label,Camera,123,123
Label,Camera,122,122
Label,Camera,121,121
Label,Camera,120,120
Label,Camera,119,119
Label,Camera,118,118
Label,Camera,117,117
Label,Camera,116,116
Label,Camera,115,115
Label,Camera,114,114
Label,Camera,113,113
Label,Camera,112,112
Label,Camera,111,111
Label,Camera,110,110
Label,Camera,109,109
Label,Camera,108,108
Label,Camera,107,107
Label,Camera,106,106
Label,Camera,105,105
Label,Camera,104,104
Label,Camera,103,103
Label,Camera,102,102
Label,Camera,101,101
Label,Camera,100,100
Label,Camera,99,99
Label,Camera,98,98
Label,Camera,97,97
Label,Camera,96,96
Label,Camera,95,95
Label,Camera,94,94
Label,Camera,93,93
Label,Camera,92,92
Label,Camera,91,91
Label,Camera,90,90
Label,Camera,89,89
Label,Camera,88,88
Label,Camera,87,87
Label,Camera,86,86
Label,Camera,85,85
Label,Camera,84,84
Label,Camera,83,83
Label,Camera,82,82
Label,Camera,81,81
Label,Camera,80,80
Label,Camera,79,79
Label,Camera,78,78
Label,Camera,77,77
Label,Camera,76,76
Label,Camera,75,75
Label,Camera,74,74
Label,Camera,73,73
Label,Camera,72,72
Label,Camera,71,71
Label,Camera,70,70
Label,Camera,69,69
Label,Camera,68,68
Label,Camera,67,67
Label,Camera,66,66
Label,Camera,65,65
Label,Camera,64,64
Label,Camera,63,63
Label,Camera,62,62
Label,Camera,61,61
Label,Camera,60,60
Label,Camera,59,59
Label,Camera,58,58
Label,Camera,57,57
Label,Camera,56,56
Label,Camera,55,55
Label,Camera,54,54
Label,Camera,53,53
Label,Camera,52,52
Label,Camera,51,51
Label,Camera,50,50
Label,Camera,49,49
Label,Camera,48,48
Label,Camera,47,47
Label,Camera,46,46
Label,Camera,45,45
Label,Camera,44,44
Label,Camera,43,43
Label,Camera,42,42
Label,Camera,41,41
Label,Camera,40,40
Label,Camera,39,39
Label,Camera,38,38
Label,Camera,37,37
Label,Camera,36,36
Label,Camera,35,35
Label,Camera,34,34
Label,Camera,33,33
Label,Camera,32,32
Label,Camera,31,31
Label,Camera,30,30
Label,Camera,29,29
Label,Camera,28,28
Label,Camera,27,27
Label,Camera,26,26
Label,Camera,25,25
Label,Camera,24,24
Label,Camera,23,23
Label,Camera,22,22
Label,Camera,21,21
Label,Camera,20,20
Label,Camera,19,19
Label,Camera,18,18
Label,Camera,17,17
Label,Camera,16,16
Label,Camera,15,15
Label,Camera,14,14
Label,Camera,13,13
Label,Camera,12,12
Label,Camera,11,11
Label,Camera,10,10
Label,Camera,9,9
Label,Camera,8,8
Label,Camera,7,7
Label,Camera,6,6
Label,Camera,5,5
Label,Camera,4,4
Label,Camera,3,3
Label,Camera,2,2
Label,Camera,1,1
Label,Camera,0,0

# Configuration presets
# Group: FISH_Channels
# Preset: RFP
ConfigGroup,FISH_Channels,RFP,FilterTurret1,Label,3-Continuous89002 - 00
ConfigGroup,FISH_Channels,RFP,PFS,DichroicMirrorInserted,Yes
ConfigGroup,FISH_Channels,RFP,Iris15,Exposure,1000.0000
ConfigGroup,FISH_Channels,RFP,LightEngine,BLUE_Intensity,0
ConfigGroup,FISH_Channels,RFP,LightEngine,CYAN_Intensity,0
ConfigGroup,FISH_Channels,RFP,LightEngine,GREEN_Intensity,1000
ConfigGroup,FISH_Channels,RFP,LightEngine,NIR_Intensity,0
ConfigGroup,FISH_Channels,RFP,LightEngine,RED_Intensity,0
ConfigGroup,FISH_Channels,RFP,LightEngine,TEAL_Intensity,0
ConfigGroup,FISH_Channels,RFP,LightEngine,VIOLET_Intensity,0
ConfigGroup,FISH_Channels,RFP,FW_Empty,Volts,0.0000
ConfigGroup,FISH_Channels,RFP,FW_FITC,Volts,0.0000
ConfigGroup,FISH_Channels,RFP,FW_TRITC,Volts,5.0000
ConfigGroup,FISH_Channels,RFP,FW_Cy5,Volts,0.0000
ConfigGroup,FISH_Channels,RFP,FW_CFPHQ,Volts,0.0000
ConfigGroup,FISH_Channels,RFP,FW_YFPHQ,Volts,0.0000
ConfigGroup,FISH_Channels,RFP,Cel_Violet408,Volts,0.0000
ConfigGroup,FISH_Channels,RFP,Cel_Blue445,Volts,0.0000
ConfigGroup,FISH_Channels,RFP,Cel_Cyan473,Volts,0.0000
ConfigGroup,FISH_Channels,RFP,Cel_Teal518,Volts,0.0000
ConfigGroup,FISH_Channels,RFP,Cel_Green545,Volts,5.0000
ConfigGroup,FISH_Channels,RFP,Cel_Red635,Volts,0.0000
ConfigGroup,FISH_Channels,RFP,Cel_NIR750,Volts,0.0000
ConfigGroup,FISH_Channels,RFP,Shutter,Volts,0.0000

# Preset: GFP
ConfigGroup,FISH_Channels,GFP,FilterTurret1,Label,3-Continuous89002 - 00
ConfigGroup,FISH_Channels,GFP,PFS,DichroicMirrorInserted,Yes
ConfigGroup,FISH_Channels,GFP,Iris15,Exposure,200.0000
ConfigGroup,FISH_Channels,GFP,LightEngine,BLUE_Intensity,0
ConfigGroup,FISH_Channels,GFP,LightEngine,CYAN_Intensity,1000
ConfigGroup,FISH_Channels,GFP,LightEngine,GREEN_Intensity,0
ConfigGroup,FISH_Channels,GFP,LightEngine,NIR_Intensity,0
ConfigGroup,FISH_Channels,GFP,LightEngine,RED_Intensity,0
ConfigGroup,FISH_Channels,GFP,LightEngine,TEAL_Intensity,0
ConfigGroup,FISH_Channels,GFP,LightEngine,VIOLET_Intensity,0
ConfigGroup,FISH_Channels,GFP,FW_Empty,Volts,0.0000
ConfigGroup,FISH_Channels,GFP,FW_FITC,Volts,5.0000
ConfigGroup,FISH_Channels,GFP,FW_TRITC,Volts,0.0000
ConfigGroup,FISH_Channels,GFP,FW_Cy5,Volts,0.0000
ConfigGroup,FISH_Channels,GFP,FW_CFPHQ,Volts,0.0000
ConfigGroup,FISH_Channels,GFP,FW_YFPHQ,Volts,0.0000
ConfigGroup,FISH_Channels,GFP,Cel_Violet408,Volts,0.0000
ConfigGroup,FISH_Channels,GFP,Cel_Blue445,Volts,0.0000
ConfigGroup,FISH_Channels,GFP,Cel_Cyan473,Volts,5.0000
ConfigGroup,FISH_Channels,GFP,Cel_Teal518,Volts,0.0000
ConfigGroup,FISH_Channels,GFP,Cel_Green545,Volts,0.0000
ConfigGroup,FISH_Channels,GFP,Cel_Red635,Volts,0.0000
ConfigGroup,FISH_Channels,GFP,Cel_NIR750,Volts,0.0000
ConfigGroup,FISH_Channels,GFP,Shutter,Volts,0.0000

# Preset: Cy7-noPFS
ConfigGroup,FISH_Channels,Cy7-noPFS,FilterTurret1,Label,5-Cy7
ConfigGroup,FISH_Channels,Cy7-noPFS,PFS,DichroicMirrorInserted,No
ConfigGroup,FISH_Channels,Cy7-noPFS,Iris15,Exposure,1000.0000
ConfigGroup,FISH_Channels,Cy7-noPFS,LightEngine,BLUE_Intensity,0
ConfigGroup,FISH_Channels,Cy7-noPFS,LightEngine,CYAN_Intensity,0
ConfigGroup,FISH_Channels,Cy7-noPFS,LightEngine,GREEN_Intensity,0
ConfigGroup,FISH_Channels,Cy7-noPFS,LightEngine,NIR_Intensity,1000
ConfigGroup,FISH_Channels,Cy7-noPFS,LightEngine,RED_Intensity,0
ConfigGroup,FISH_Channels,Cy7-noPFS,LightEngine,TEAL_Intensity,0
ConfigGroup,FISH_Channels,Cy7-noPFS,LightEngine,VIOLET_Intensity,0
ConfigGroup,FISH_Channels,Cy7-noPFS,FW_Empty,Volts,5.0000
ConfigGroup,FISH_Channels,Cy7-noPFS,FW_FITC,Volts,0.0000
ConfigGroup,FISH_Channels,Cy7-noPFS,FW_TRITC,Volts,0.0000
ConfigGroup,FISH_Channels,Cy7-noPFS,FW_Cy5,Volts,0.0000
ConfigGroup,FISH_Channels,Cy7-noPFS,FW_CFPHQ,Volts,0.0000
ConfigGroup,FISH_Channels,Cy7-noPFS,FW_YFPHQ,Volts,0.0000
ConfigGroup,FISH_Channels,Cy7-noPFS,Cel_Violet408,Volts,0.0000
ConfigGroup,FISH_Channels,Cy7-noPFS,Cel_Blue445,Volts,0.0000
ConfigGroup,FISH_Channels,Cy7-noPFS,Cel_Cyan473,Volts,0.0000
ConfigGroup,FISH_Channels,Cy7-noPFS,Cel_Teal518,Volts,0.0000
ConfigGroup,FISH_Channels,Cy7-noPFS,Cel_Green545,Volts,0.0000
ConfigGroup,FISH_Channels,Cy7-noPFS,Cel_Red635,Volts,0.0000
ConfigGroup,FISH_Channels,Cy7-noPFS,Cel_NIR750,Volts,5.0000
ConfigGroup,FISH_Channels,Cy7-noPFS,Shutter,Volts,0.0000

# Preset: Cy7
ConfigGroup,FISH_Channels,Cy7,FilterTurret1,Label,5-Cy7
ConfigGroup,FISH_Channels,Cy7,PFS,DichroicMirrorInserted,Yes
ConfigGroup,FISH_Channels,Cy7,Iris15,Exposure,1000.0000
ConfigGroup,FISH_Channels,Cy7,LightEngine,BLUE_Intensity,0
ConfigGroup,FISH_Channels,Cy7,LightEngine,CYAN_Intensity,0
ConfigGroup,FISH_Channels,Cy7,LightEngine,GREEN_Intensity,0
ConfigGroup,FISH_Channels,Cy7,LightEngine,NIR_Intensity,1000
ConfigGroup,FISH_Channels,Cy7,LightEngine,RED_Intensity,0
ConfigGroup,FISH_Channels,Cy7,LightEngine,TEAL_Intensity,0
ConfigGroup,FISH_Channels,Cy7,LightEngine,VIOLET_Intensity,0
ConfigGroup,FISH_Channels,Cy7,FW_Empty,Volts,5.0000
ConfigGroup,FISH_Channels,Cy7,FW_FITC,Volts,0.0000
ConfigGroup,FISH_Channels,Cy7,FW_TRITC,Volts,0.0000
ConfigGroup,FISH_Channels,Cy7,FW_Cy5,Volts,0.0000
ConfigGroup,FISH_Channels,Cy7,FW_CFPHQ,Volts,0.0000
ConfigGroup,FISH_Channels,Cy7,FW_YFPHQ,Volts,0.0000
ConfigGroup,FISH_Channels,Cy7,Cel_Violet408,Volts,0.0000
ConfigGroup,FISH_Channels,Cy7,Cel_Blue445,Volts,0.0000
ConfigGroup,FISH_Channels,Cy7,Cel_Cyan473,Volts,0.0000
ConfigGroup,FISH_Channels,Cy7,Cel_Teal518,Volts,0.0000
ConfigGroup,FISH_Channels,Cy7,Cel_Green545,Volts,0.0000
ConfigGroup,FISH_Channels,Cy7,Cel_Red635,Volts,0.0000
ConfigGroup,FISH_Channels,Cy7,Cel_NIR750,Volts,5.0000
ConfigGroup,FISH_Channels,Cy7,Shutter,Volts,0.0000

# Preset: BF
ConfigGroup,FISH_Channels,BF,FilterTurret1,Label,3-Continuous89002 - 00
ConfigGroup,FISH_Channels,BF,PFS,DichroicMirrorInserted,Yes
ConfigGroup,FISH_Channels,BF,Iris15,Exposure,50.0000
ConfigGroup,FISH_Channels,BF,LightEngine,BLUE_Intensity,0
ConfigGroup,FISH_Channels,BF,LightEngine,CYAN_Intensity,0
ConfigGroup,FISH_Channels,BF,LightEngine,GREEN_Intensity,0
ConfigGroup,FISH_Channels,BF,LightEngine,NIR_Intensity,0
ConfigGroup,FISH_Channels,BF,LightEngine,RED_Intensity,0
ConfigGroup,FISH_Channels,BF,LightEngine,TEAL_Intensity,0
ConfigGroup,FISH_Channels,BF,LightEngine,VIOLET_Intensity,0
ConfigGroup,FISH_Channels,BF,FW_Empty,Volts,0.0000
ConfigGroup,FISH_Channels,BF,FW_FITC,Volts,0.0000
ConfigGroup,FISH_Channels,BF,FW_TRITC,Volts,5.0000
ConfigGroup,FISH_Channels,BF,FW_Cy5,Volts,0.0000
ConfigGroup,FISH_Channels,BF,FW_CFPHQ,Volts,0.0000
ConfigGroup,FISH_Channels,BF,FW_YFPHQ,Volts,0.0000
ConfigGroup,FISH_Channels,BF,Cel_Violet408,Volts,0.0000
ConfigGroup,FISH_Channels,BF,Cel_Blue445,Volts,0.0000
ConfigGroup,FISH_Channels,BF,Cel_Cyan473,Volts,0.0000
ConfigGroup,FISH_Channels,BF,Cel_Teal518,Volts,0.0000
ConfigGroup,FISH_Channels,BF,Cel_Green545,Volts,0.0000
ConfigGroup,FISH_Channels,BF,Cel_Red635,Volts,0.0000
ConfigGroup,FISH_Channels,BF,Cel_NIR750,Volts,0.0000
ConfigGroup,FISH_Channels,BF,Shutter,Volts,5.0000

# Preset: Cy5
ConfigGroup,FISH_Channels,Cy5,FilterTurret1,Label,3-Continuous89002 - 00
ConfigGroup,FISH_Channels,Cy5,PFS,DichroicMirrorInserted,Yes
ConfigGroup,FISH_Channels,Cy5,Iris15,Exposure,1000.0000
ConfigGroup,FISH_Channels,Cy5,LightEngine,BLUE_Intensity,0
ConfigGroup,FISH_Channels,Cy5,LightEngine,CYAN_Intensity,0
ConfigGroup,FISH_Channels,Cy5,LightEngine,GREEN_Intensity,0
ConfigGroup,FISH_Channels,Cy5,LightEngine,NIR_Intensity,0
ConfigGroup,FISH_Channels,Cy5,LightEngine,RED_Intensity,1000
ConfigGroup,FISH_Channels,Cy5,LightEngine,TEAL_Intensity,0
ConfigGroup,FISH_Channels,Cy5,LightEngine,VIOLET_Intensity,0
ConfigGroup,FISH_Channels,Cy5,FW_Empty,Volts,0.0000
ConfigGroup,FISH_Channels,Cy5,FW_FITC,Volts,0.0000
ConfigGroup,FISH_Channels,Cy5,FW_TRITC,Volts,0.0000
ConfigGroup,FISH_Channels,Cy5,FW_Cy5,Volts,5.0000
ConfigGroup,FISH_Channels,Cy5,FW_CFPHQ,Volts,0.0000
ConfigGroup,FISH_Channels,Cy5,FW_YFPHQ,Volts,0.0000
ConfigGroup,FISH_Channels,Cy5,Cel_Violet408,Volts,0.0000
ConfigGroup,FISH_Channels,Cy5,Cel_Blue445,Volts,0.0000
ConfigGroup,FISH_Channels,Cy5,Cel_Cyan473,Volts,0.0000
ConfigGroup,FISH_Channels,Cy5,Cel_Teal518,Volts,0.0000
ConfigGroup,FISH_Channels,Cy5,Cel_Green545,Volts,0.0000
ConfigGroup,FISH_Channels,Cy5,Cel_Red635,Volts,5.0000
ConfigGroup,FISH_Channels,Cy5,Cel_NIR750,Volts,0.0000
ConfigGroup,FISH_Channels,Cy5,Shutter,Volts,0.0000



# PixelSize settings
